PsychoPy2experiment version="2020.1.2"
Settings
  Enable Escape = False
  Experiment info = {'MTurk_workerID': '', 'participant': '', 'gender': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 960]
  expName = SwitchRew_progressBar
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Routines
  Routine instructions1
    TextComponent instruction
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Move to the center dot
        Wait till it turns to a square
        and move to your target


        Click to continue...
    MouseComponent instrMouse
      forceEndRoutineOnPress = any click
      newClicksOnly = False
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = experiment
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  Routine instructions2
    TextComponent instruction_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Few practice trials first
        Click to Start...
    MouseComponent instrMouse_2
      forceEndRoutineOnPress = any click
      newClicksOnly = False
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = experiment
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  Routine feedback
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        cR = 1; cG =1; cB=1;
        msg=""; tone = "acquire.wav";

        if TimeOut:
            Counter_TimeOut = Counter_TimeOut+1;
            Correct=0;
            continueRotine = False
        else:
             if not(IDChoice==[]):
                Counter_Complete = Counter_Complete+1;
                if IDChoice==ID_port:
                   Counter_Correct = Counter_Correct +1;
                   cR=0; cG=1;cB=0;
                   msg = "Correct!"
                   Correct=1
                   tone = "reward.wav"
                   print(msg)
                else:
                   Counter_Error = Counter_Error +1;
                   cR=1; cG=0;cB=0;
                   msg = "Incorrect!"
                   Correct=0
                   tone = "failure.wav"
                   print(msg)
                reward_rate = Counter_Correct/Counter_Complete;

             else:
                Correct=0
                continueRotine = False
    PolygonComponent Center_3
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = centerOp
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    PolygonComponent Choice0_3
      fillColor = $[1,1,1]
      nVertices = 180
      pos [set every repeat] = (xPos[0],yPos[0])
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    PolygonComponent Choice1_3
      fillColor = $[1,1,1]
      nVertices = 180
      pos [set every repeat] = (xPos[1],yPos[1])
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    PolygonComponent Choice2_3
      fillColor = $[1,1,1]
      nVertices = 180
      pos [set every repeat] = (xPos[2],yPos[2])
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    PolygonComponent Choice3_3
      fillColor = $[1,1,1]
      nVertices = 180
      pos [set every repeat] = (xPos[3],yPos[3])
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    PolygonComponent Choice4_3
      fillColor = $[1,1,1]
      nVertices = 180
      pos [set every repeat] = (xPos[4],yPos[4])
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    PolygonComponent Choice5_3
      fillColor = $[1,1,1]
      nVertices = 180
      pos [set every repeat] = (xPos[5],yPos[5])
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    PolygonComponent Chosen
      fillColor [set every repeat] = $[cR,cG,cB]
      lineColor = $[0,0,0]
      opacity [set every repeat] = choiceOp
      pos [set every repeat] = (choice_xPos,choice_yPos)
      shape = rectangle
      size [set every repeat] = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent Message
      letterHeight = 0.1
      opacity [set every repeat] = $feedbackOp
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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    PolygonComponent progressBar_out3
      fillColor = $[0,0,0]
      pos [set every repeat] = (0.5, 0.2)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (0.02, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent progressBar_in3
      fillColor = $[1,1,1]
      pos [set every repeat] = (0.5, BarCenter)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (0.02, BarLength)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
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    TextComponent progress_text3
      letterHeight [set every repeat] = 0.05
      pos [set every repeat] = (.5,.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $progress_msg
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  Routine Initialization
    CodeComponent code
      Code Type = Both
      Begin Experiment:
        Total_Ntrials = 750;
        ITI_sec = 0.17
        Nport = 6
        targetDist = 0.33
        stim_size = 0.1
        minTargetDis = 0.05
        maxWait_sec = 5.0

        fixDuration = 0.5
        Counter_TimeOut = 0
        Counter_Complete = 0
        Counter_Correct = 0
        Counter_Error = 0
        minNcorrect = 3;
        maxNtrial_after = 7;
        msg=""
        progress_msg="0%"
        codemsg = ""
        feedbackOp = 1;
        NewBlock= True
        Ncorrect=0
        Correct=0
        SWITCH = 0
        Ntrial_switch = 0
        Nblock =0
        reward_rate = 0
        BarLength = 0
        BarCenter = 0.1
        perc_finish = 0;

        Durations = np.arange(0.4, 0.5, .01)#np.arange(.25, 1.75, .01)
        Ports = np.arange(Nport)
        ID_port = np.random.randint(Nport)

        ChoiceAngles = [p*2*pi/Nport for p in Ports]
        xPos = [targetDist*np.cos(c) for c in ChoiceAngles]
        yPos = [targetDist*np.sin(c) for c in ChoiceAngles]
      Begin JS Experiment:
        Total_Ntrials = 750;
        ITI_sec = 0.17;
        Nport = 6;
        targetDist = 0.33;
        stim_size = 0.1;
        minTargetDis = 0.05;
        maxWait_sec = 5.0;

        fixDuration = 0.5;
        Counter_TimeOut = 0;
        Counter_Complete = 0;
        Counter_Correct = 0;
        Counter_Error = 0;
        minNcorrect = 3;
        maxNtrial_after = 7;
        msg = "";
        progress_msg="0%";
        codemsg = "";
        feedbackOp = 1;
        NewBlock= true;
        Ncorrect= 0;
        Correct= 0;
        SWITCH = 0;
        Ntrial_switch = 0;
        Nblock = 0;
        reward_rate = 0;
        BarLength = 0;
        BarCenter = 0.1;
        perc_finish = 0;

        pi = Math.PI;
        arange = function(start, stop,step) {
         var a=[], i=start;
           while(i<=stop) {
            a.push(i);
            i = i+step;
            }
        return a;
        }

        range = function(N) {
            var a = [], b = 0;
            while (b < N ) {
                a.push(b);
                b = b+1;
            }
            return a;
        }

        randint = function(N){
            var a=[];
            if (Number.isInteger(N)){
                a = Math.floor(Math.random() * N);
                }
            return a;
        }

        Durations = arange(0.4, 0.5, .01)
        Ports = range(Nport);
        ID_port = randint(Nport);

        ChoiceAngles = function () {
            var _pj_a = [], _pj_b = Ports;
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var p = _pj_b[_pj_c];
                _pj_a.push((((p * 2) * pi) / Nport));
            }
            return _pj_a;
        }
        .call(this);
        xPos = function () {
            var _pj_a = [], _pj_b = ChoiceAngles;
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var c = _pj_b[_pj_c];
                _pj_a.push((targetDist * Math.cos(c)));
            }
            return _pj_a;
        }
        .call(this);
        yPos = function () {
            var _pj_a = [], _pj_b = ChoiceAngles;
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var c = _pj_b[_pj_c];
                _pj_a.push((targetDist * Math.sin(c)));
            }
            return _pj_a;
        }
        .call(this);


        $.getJSON('https://api.ipify.org?format=json', function(data){

            console.log(data.ip);
            localStorage.setItem('ip',data.ip);

            psychoJS.experiment.addData('IP_Addresss', data.ip)

          });
    PolygonComponent start_session
      fillColor = $[1,1,1]
      nVertices = 180
      opacity = 0
      shape = cross
      size [set every repeat] = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
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  Routine ITI
    PolygonComponent blank
      fillColor = $[1,1,1]
      opacity = 0
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITI_sec
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    PolygonComponent progressBar_out4
      fillColor = $[0,0,0]
      pos [set every repeat] = (0.5, 0.2)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (0.02, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITI_sec
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    PolygonComponent progressBar_in4
      fillColor = $[1,1,1]
      pos [set every repeat] = (0.5, BarCenter)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (0.02, BarLength)
      startVal [time (s)] = 0
      stopVal [duration (s)] = ITI_sec
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    TextComponent progress_text4
      letterHeight [set every repeat] = 0.05
      pos [set every repeat] = (.5,.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITI_sec
      text [set every repeat] = $progress_msg
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  Routine instructions3
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        #ID_port = 0
        ID_port = np.random.randint(Nport)
        Ncorrect = 0;
        Nblock = 1;
        Counter_TimeOut = 0
        Counter_Complete = 0
        Counter_Correct = 0
        Counter_Error = 0
        msg=""
        feedbackOp = 0;
    TextComponent instruction_3
      letterHeight = 0.045
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Your goal is to gain as much 'Correct' as possible.

        Ready? Click to Start

        OR press [esc] to quit, result will NOT be saved.
    MouseComponent instrMouse_3
      forceEndRoutineOnPress = any click
      newClicksOnly = False
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = experiment
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  Routine trial_fix
    CodeComponent code_1
      Code Type = Auto->JS
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      Begin Routine:
        fixDuration  = Durations[np.random.randint(Durations.size)] # Take one of the randomized durations
        #print("fix duration is ",fixDuration,'s')
        #print("target is ",ID_port)

        mouse1.pos=(0.0,0.0)
        centerOp = 0.25
        choiceOp = 0

        #EXIT = False
        Fixation = False
        TimeOut = True
        Correct = 0;
        timer0 = core.CountdownTimer(60)
      Each Frame:
        if timer0.getTime()>0:
            CursorCenterDistance = sqrt((mouse1.getPos()[0]- 0)**2 + (mouse1.getPos()[1]- 0)**2)
            if (CursorCenterDistance > minTargetDis):
                centerOp = .25
            else:
                centerOp = 1

            if (CursorCenterDistance < minTargetDis) and (not(Fixation)):
                Fixation = True
                TimeOut= False
                timer1 = core.CountdownTimer(fixDuration)
            if (CursorCenterDistance < minTargetDis) and (timer1.getTime()<=0):
                Fixation = True
                TimeOut= False
                continueRoutine = False


        else:
            Fixation = False
            TimeOut = True
            continueRoutine = False
      End Routine:
        print("TimeOut=",TimeOut, "Fixation=",Fixation)
    PolygonComponent Center
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = centerOp
      shape = regular polygon...
      size [set every repeat] = (0.1, 0.1)
      startVal [time (s)] = 0
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    PolygonComponent Choice0
      fillColor = $[1,1,1]
      nVertices = 180
      pos [set every repeat] = (xPos[0],yPos[0])
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (0.1, 0.1)
      startVal [time (s)] = 0
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    PolygonComponent Choice1
      fillColor = $[1,1,1]
      nVertices = 180
      pos [set every repeat] = (xPos[1],yPos[1])
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (0.1, 0.1)
      startVal [time (s)] = 0
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    PolygonComponent Choice2
      fillColor = $[1,1,1]
      nVertices = 180
      pos [set every repeat] = (xPos[2],yPos[2])
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (0.1, 0.1)
      startVal [time (s)] = 0
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    PolygonComponent Choice3
      fillColor = $[1,1,1]
      nVertices = 180
      pos [set every repeat] = (xPos[3],yPos[3])
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (0.1, 0.1)
      startVal [time (s)] = 0
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    PolygonComponent Choice4
      fillColor = $[1,1,1]
      nVertices = 180
      pos [set every repeat] = (xPos[4],yPos[4])
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (0.1, 0.1)
      startVal [time (s)] = 0
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    PolygonComponent Choice5
      fillColor = $[1,1,1]
      nVertices = 180
      pos [set every repeat] = (xPos[5],yPos[5])
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (0.1, 0.1)
      startVal [time (s)] = 0
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    MouseComponent mouse1
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = every frame
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = experiment
    PolygonComponent progressBar_out1
      fillColor = $[0,0,0]
      pos [set every repeat] = (0.5, 0.2)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (0.02, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent progressBar_in1
      fillColor = $[1,1,1]
      pos [set every repeat] = (0.5, BarCenter)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (0.02, BarLength)
      startVal [time (s)] = 0.0
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    TextComponent progress_text1
      letterHeight [set every repeat] = 0.05
      pos [set every repeat] = (.5,.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $progress_msg
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  Routine trial_choice
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        CursorChoiceDistance=np.ones(Nport)
        Choose = False
        IDChoice = []
        RT = np.nan
      Begin Routine:
        Choose = False
        IDChoice = []
        RT= np.nan
        timer3 = core.CountdownTimer(maxWait_sec)

        if TimeOut:
            continueRoutine = False
      Each Frame:
        if (timer3.getTime() > 0):
            for p in Ports:
                CursorChoiceDistance[p] = sqrt((mouse2.getPos()[0]-xPos[p])**2 + (mouse2.getPos()[1]-yPos[p])**2)
                if (CursorChoiceDistance[p] < minTargetDis):
                    Choose = True
                    IDChoice = p
                    RT = maxWait_sec - timer3.getTime()
                    continueRoutine = False

        else:
             TimeOut = True
             continueRoutine = False
      End Routine:
        print("target = ",ID_port," choice = ", IDChoice, "RT = ", RT)
        if Choose:
            choiceOp = 1
            choice_xPos=xPos[IDChoice]
            choice_yPos=yPos[IDChoice]
        else:
            choiceOp = 0
            choice_xPos=0
            choice_yPos=0
    PolygonComponent Center_2
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = centerOp
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (0.1, 0.1)
      startVal [time (s)] = 0
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    PolygonComponent Choice0_2
      fillColor = $[1,1,1]
      nVertices = 180
      pos [set every repeat] = (xPos[0],yPos[0])
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (0.1, 0.1)
      startVal [time (s)] = 0
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    PolygonComponent Choice1_2
      fillColor = $[1,1,1]
      nVertices = 180
      pos [set every repeat] = (xPos[1],yPos[1])
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (0.1, 0.1)
      startVal [time (s)] = 0
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    PolygonComponent Choice2_2
      fillColor = $[1,1,1]
      nVertices = 180
      pos [set every repeat] = (xPos[2],yPos[2])
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (0.1, 0.1)
      startVal [time (s)] = 0
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    PolygonComponent Choice3_2
      fillColor = $[1,1,1]
      nVertices = 180
      pos [set every repeat] = (xPos[3],yPos[3])
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (0.1, 0.1)
      startVal [time (s)] = 0
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    PolygonComponent Choice4_2
      fillColor = $[1,1,1]
      nVertices = 180
      pos [set every repeat] = (xPos[4],yPos[4])
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (0.1, 0.1)
      startVal [time (s)] = 0
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    PolygonComponent Choice5_2
      fillColor = $[1,1,1]
      nVertices = 180
      pos [set every repeat] = (xPos[5],yPos[5])
      saveStartStop = False
      shape = regular polygon...
      size [set every repeat] = (0.1, 0.1)
      startVal [time (s)] = 0
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    MouseComponent mouse2
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = every frame
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = experiment
    PolygonComponent progressBar_out2
      fillColor = $[0,0,0]
      pos [set every repeat] = (0.5, 0.2)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (0.02, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent progressBar_in2
      fillColor = $[1,1,1]
      pos [set every repeat] = (0.5, BarCenter)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (0.02, BarLength)
      startVal [time (s)] = 0.0
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    TextComponent progress_text2
      letterHeight [set every repeat] = 0.05
      pos [set every repeat] = (.5,.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $progress_msg
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  Routine end
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        reward_rate = np.round(reward_rate*100)
        codemsg = "SurveyCode: " + str(int(reward_rate))
    MouseComponent mouse_end
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      timeRelativeTo = experiment
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    TextComponent thank
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $codemsg
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    TextComponent text
      letterHeight = 0.1
      pos = (0,-0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Click to Save and Exit
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  Routine block_transition
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        savefilename = thisExp.dataFileName[:-5]
      Begin Routine:
        thisExp.addData("fixDuration", fixDuration)
        thisExp.addData("Correct", Correct)
        thisExp.addData("SWITCH", SWITCH)
        thisExp.addData("ID_port", ID_port)
        thisExp.addData("IDChoice", IDChoice)
        thisExp.addData("RT", RT)
        thisExp.addData("Nblock", Nblock)
        thisExp.addData("Counter_Complete", Counter_Complete)
        thisExp.addData("Counter_Correct", Counter_Correct)
        thisExp.addData("Counter_Error", Counter_Error)
        print("#trial = ",Counter_Complete,",#trial_switch = ",Ntrial_switch)
        print("Ncorrect =",Ncorrect)
        print("============================")
      End Routine:
        SWITCH = 0
        if not(Correct):
            Ncorrect=0
        else:
            Ncorrect= Ncorrect + Correct
            if (Ncorrect==minNcorrect) and (NewBlock):
               Ntrial_switch = Counter_Complete + np.random.randint(maxNtrial_after)+1
               NewBlock=False
               SWITCH = 1

        if (Counter_Complete  == Ntrial_switch) and not(NewBlock):
            Nblock = Nblock+1;
            ID_port = (ID_port + np.random.randint(Nport-1) +1)%Nport
            NewBlock = True
            print("****New Block****")
            thisExp.saveAsWideText(savefilename +'.csv',fileCollisionMethod='overwrite')
            thisExp.saveAsPickle(savefilename,fileCollisionMethod='overwrite')

        perc_finish = np.ceil(100*mainLoop.thisRepN/Total_Ntrials);
        BarLength = 0.2*perc_finish/100;
        BarCenter = 0.1 + BarLength/2;
        progress_msg = str(perc_finish) + "%";
Flow
  Routine instructions1
  Routine instructions2
  Routine Initialization
  LoopInitiator pracLoop loopType="TrialHandler"
    loopType = random
    nReps = 7
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    Routine trial_fix
    Routine trial_choice
    Routine feedback
    Routine ITI
  LoopTerminator pracLoop
  Routine instructions3
  LoopInitiator mainLoop loopType="TrialHandler"
    loopType = random
    nReps = Total_Ntrials
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    Routine trial_fix
    Routine trial_choice
    Routine feedback
    Routine ITI
    Routine block_transition
  LoopTerminator mainLoop
  Routine end
